//Grab MDA settings and push to TG3
//Note this was built on MM 2.0 BETA, haven't tried it in Gamma
//Contact Austin Blanco @ Advanced Research Consulting for questions or support 
// V 2.04
/*
 * 
 * V201 updates
 * - fixed triggering mode options
 * - fixed improper null assignment for time positions
 * - fixed time points = 0 bug.
 * 
 * 202 updates
 * - disabled trigger mode command - causing a hang in TGS code. 
 * - added shutter use for TTL, NOT ttl itself - useful for real-world implementations. 
 * - added new shutter name variable. 
 * 
 * 203 updates
 * - fixed step size bug wherein any Z config other than 0-1000 wouldn't work
 * - added new var tgsFname -> used to control/override the focus device name
 * - added new step start and range outputs and calcs to support ^^ issue
 * 
 * 204 updates
 * - fixed handling issues w/ negative Z ranges in GUI
 * - addressed output range control for inverted values
 *
 * TODO
 * - auto-find focus device name
 * - colorize channels in final image
 * - > Timelapse must be on and set to == 1 or < 
 * - > CHANNELS must be either no included in channels list or included + used (checkbox=on)
 * - add auto grab of serial port
 * - add auto grab of BAUD
 * 
 * - need to add in active channel data to meta for images
 * - test various combo's of time off, time set to 0, z off and on, channel off and on etc. 
 */


import java.util.regex.Matcher;
import java.util.regex.Pattern;
import org.micromanager.api.AcquisitionOptions;
import java.lang.System;
import java.lang.Math;
import ij.gui.GenericDialog;

//for storing image data
import org.micromanager.data.Coords;
import org.micromanager.data.Image;
import org.micromanager.data.Datastore;
import org.micromanager.display.DisplayWindow;

//vars for global use
port = "COM6"; //enter triggerscope COM port here
fName = "TriggerScope-Focus"; //change if your focus device name is different
shutterName = "TGS"; //set this name to whatever you named your TTL state device shutter. 
lambda = new ArrayList();
int [][] dacArray = new int[10] [16]; //an array to hold values for the DAC channel
int [][] ttlArray = new int[10] [16]; //an array to hold values for the TTL channel
int progline = 0;
debugger = true; //flag off to disable output
trMode = 0; //sets triggerMode for camera type, 0=Low, 1=High, 2=Rising, 3=Falling 4=Change

boolean tgsWrite(String inData) {
	mmc.setSerialPortCommand(port,inData,"\n");
	tgAnswer = mmc.getSerialPortAnswer(port, "\n");
	//print(tgAnswer);
	Thread.sleep(5);
	return true;	
}

print("																																					Setting up MDA");
settings = mm.acquisitions().getAcquisitionSettings();

print ("Write Files to: "+ settings.root + "/" + settings.prefix);
savePath = settings.root + "/" + settings.prefix;
channels = settings.channels;
String activeGroup = settings.channelGroup;
exposureMs = mmc.getExposure();
print ("Camera Exposure = " + exposureMs);

if(debugger) {print("Active Lambda Group = "+activeGroup); }

int i=0;
for(c : channels) {
	lambda.add(channels.get(i).config); //collect used presets
	if(debugger) {print(lambda.get(i));}
	i++;
}

//prep Z variables
i = 0;
zStart = 0;
zEnd = 0;
zStep = 0;
zDirection = false;
float zVMax = Float.parseFloat( mmc.getProperty(fName, "Z Upper Limit") );
float zVMin = Float.parseFloat( mmc.getProperty(fName, "Z Lower Limit") );
print("Maximum Z position = "+zVMax+", Min Z position = "+zVMin);
print("range = " + (zVMax - zVMin));
for (z : settings.slices) {
	 if(i == 0) { zStart = z; } //get start 
	 zEnd = z; //will end up with stop
	 zStep = i; //will end up @ steps
     if(debugger) { print("Slice: " + i + ", is at: " + z); }
     i++;
}

//figure out Z step size per slize and direction fo travel
if(zStart < zEnd) {
	zStep = (zEnd - zStart) / zStep;
	zDirection = true;
	}
if (zStart > zEnd) {
	zStep = (zStart - zEnd) / zStep;
	zDirection = false;
	}

//get # timelapse points
int timeloops = settings.numFrames;
if(timeloops == 0) {timeloops=1;}
if(debugger) {print("Timelapse Loops = " +timeloops);}

/****checks the acquisition order
 * mode 0 == channel first eg set ch1 stweep Z
 * mode 1 == Z first EG step Z then Ch1 Ch2 then Step Z ...
 */
int mode = 0;
if(!settings.slicesFirst) {mode = 1;}
print("Z Sweep Mode:"+mode);

//get CHANNEL INFO USED FOR THIS SCAN
mmcorej.StrVector configs = mmc.getAvailableConfigGroups();

for (int i=0; i<configs.size(); i++) {
	 mmcorej.StrVector presets = mmc.getAvailableConfigs((configs.get(i)));
    for (int j=0;  j<presets.size(); j++) {
        mmcorej.Configuration config = mmc.getConfigData(configs.get(i), presets.get(j)); 
       
        if(configs.get(i).equals(activeGroup) ) {
        		if(debugger) {print("Configuration " + configs.get(i) + "-" + presets.get(j));}

		  boolean configUsed = false;	
		  for (int i = 0; i < lambda.size(); i++) { //check to see if the preset is actually used in the MDA window
				//print(presets.get(j) +" and " +lambda.get(i));
				if(presets.get(j).equals(lambda.get(i))) {
				    configUsed = true; print("matched: "+lambda.get(i));
				} 
		  }	
					
			if(configUsed) {
        		for (int k=0; k<config.size(); k++) {
           		mmcorej.PropertySetting s = config.getSetting(k);
					if(( s.getDeviceLabel().contains("Trig") ) || ( s.getDeviceLabel().contains(shutterName) ) ) { //only list triggerscope settings
           			if(debugger) { print(" " + s.getDeviceLabel() + ", " + s.getPropertyName() + ", " + s.getPropertyValue()); }
						if(( s.getDeviceLabel().contains("Trig") ) || ( s.getDeviceLabel().contains(shutterName) )) { //only list triggerscope settings
							
							if (s.getDeviceLabel().contains("DA") ) { //grab DAC Values
									str = s.getDeviceLabel().replaceAll("\\D+","" ); //pull DAC number
									strb = s.getPropertyValue().replaceAll("\\.D","" ); //pull DAC Value in VOLTS
									float f = Float.parseFloat(strb);
									int dn = Integer.parseInt(str);
									int dacVal = 65536 * (f /10)	;
									if(debugger) {
										print("Dac Line:"+ str + "=" +strb);
										print(" Digital Line = "+ dn +" @ " + dacVal );
										print("Program Line = " + progline);
									}
									dacArray[progline][dn-1] = dacVal ;			
			      			}
							if (s.getDeviceLabel().contains("TGS") ) { //grab TTL Values
									str = s.getDeviceLabel().replaceAll("\\D+","" ); //pull TTL number
									strb = s.getPropertyValue().replaceAll("\\D","" ); //pull TTL Value
									int ttv = 1; //always on for a shutter
									int ttn = Integer.parseInt(strb);
									if(debugger) {
											print("TTL Line:"+ str + "=" +strb); 
											print(" Digital Line = "+ ttn +" @ " + ttv );
										}	
									ttlArray[progline][ttn-1] = ttv ;					
			      			}
						} 
         		}
           	}
				progline++;
			}
   	} 
	}
}

//create int values for FOCUS
	double zNumsteps = 0;
if( zStep != 0) {

	if(zDirection) {zNumsteps = ((zEnd - zStart) / zStep)+1;}
		else zNumsteps = ((zStart - zEnd) / zStep)+1;
}

String tout = "";
String dout = "";
print("TTL Configuration....");
	for(int d = 0;d < progline;d++) { //print all program lines
		for(int t = 0;t < 16;++t) { //print all 16 outputs
			tout = tout + ttlArray[d][t] + ","; 
		}	
		print("Program Line" + d +" = " + tout);
		tout = ""; 
	}
print("DAC Configuration....");
	for(int d = 0;d < progline;d++) { //print all program lines
		for(int t = 0;t < 16;++t) { //print all 16 outputs
			dout = dout + dacArray[d][t] + ","; 
		}	
		print("Program Line" + d +" = " + dout);
		dout = ""; 
	}
nrFrames=0;
if( zStep != 0) { nrFrames = timeloops * progline * (int)zNumsteps;}//total images to acquire
else nrFrames = timeloops * progline;
print("Will capture " + nrFrames + " images in a high speed triggered sequence");

	
GenericDialog dlg = new GenericDialog("Arm and Capture?", null);
dlg.addMessage("Arm Triggerscope and capture Sequence Now?");
runcapture = false;

//Report Z sequence code
print("Z Start = " + zStart + ", Z Stop = " + zEnd +", Step Size = " + zStep + ", Direction = " + zDirection + ", Number of Slices = " + zNumsteps);

float zVStep = (zVMax - zVMin ) /65535 ;
 
zRange = zVMax - zVMin;
print("Total Z Travel = " + zRange);
//Stick inside focus loop
int zStartInt 	= 	zStart /zVStep	;		
int offset = -zVMin/zVStep;
if(debugger) { print("Uncompensated Z Start Value " +zStartInt); }
if(zStartInt >= 0 && zVMin < 0) {zStartInt = zStartInt + offset;} //correct for center 0 range
if(zStartInt < 0) { zStartInt = zStartInt- (zStartInt*2);} //not sure why abs() doesn't work!
if(debugger) { print("Negative Compensated Z start value " + zStartInt); }
		
int zNumsInt 	= 	zNumsteps		;
int zStepInt	=  zStep	 /zVStep	; 
int ZDI = 0;
if(zDirection){ZDI=1;} //simple convert to int from bool
tout = "";
tout = "PROG_FOCUS,"+zStartInt+","+zStepInt+","+zNumsInt+","+ZDI+","+mode;
print(tout);
		



dlg.showDialog();
if (dlg.wasCanceled()) {
   print("Canel Pressed");
}
else {runcapture = true; print( "Beginning Acquisition....");   }

	/*******************************************     LOAD And CApture Sequence HERE *************/


//Load up Triggerscope
if(runcapture) {//ready to start acquisition per user

	//create doc store for stream
	store = mm.data().createRAMDatastore();
	store.setSavePath(savePath);
	// Create a display to show images as they are acquired.
	mm.displays().createDisplay(store);
	
	String answer = ""; //a reply buffer
	print("Clearing Previous Settings...");
	//clear any previous settings from unit
	tout = "";
	tout = "CLEAR_ALL";
	if(!tgsWrite(tout)){print("Transmit Error...)"); }

/*
	print("Configuring input trigger...");
	//configure Trigger Mode
	tout = "";
	tout = "TRIGMODE," + trMode;
	if(!tgsWrite(tout)){print("Transmit Error...)"); }
*/
	print("Adding Time Loops...");
	//configure number of timepoints
	tout = "";
	tout = "TIMECYCLES," + timeloops;
	print(tout);
	if(!tgsWrite(tout)){print("Transmit Error...)"); }

	print("Configuring Z Sweep...");																									/****Z SWEEP****/
	if(zStep != 0 ) { //only load Z if there's a useable strp size
		//configure Z stacks
		int zStartInt 	= 	zStart /zVStep	;
		
		int offset = -zVMin/zVStep;
		//if(debugger) { print("Uncompensated Z Start Value " +zStartInt); }
		if(zStartInt >= 0 && zVMin < 0) {zStartInt = zStartInt + offset;} //correct for center 0 range
		if(zStartInt < 0) { zStartInt = zStartInt- (zStartInt*2);} //not sure why abs() doesn't work!
		//if(debugger) { print("Negative Compensated Z start value " + zStartInt); }
	
		int zNumsInt 	= 	zNumsteps		;
		int zStepInt	=  zStep	 /zVStep	; 
		int ZDI = 0;
		if(zDirection){ZDI=1;} //simple convert to int from bool
		tout = "";
		tout = "PROG_FOCUS,"+zStartInt+","+zStepInt+","+zNumsInt+","+ZDI+","+mode;
		print(tout);
		if(!tgsWrite(tout)){print("Transmit Error...)"); }
	}
	
	tout = "";
	dout = "";
	for(int d = 0;d < progline;d++) { //load all TTL lines
		for(int t = 0;t < 16;++t) { //print all 16 outputs
			tout = "PROG_TTL," + (d+1) + "," + (t+1) + "," + ttlArray[d][t];
			//print(tout);
			if(!tgsWrite(tout)){print("Transmit Error...)"); }		 
		}	
		for(int t = 0;t < 15;++t) { //load all DAC lines
			dout = dout + dacArray[d][t] + ","; 
			dout = "PROG_DAC," + (d+1) + "," + (t+1) + "," + dacArray[d][t];
			//print(tout);
			if(!tgsWrite(dout)){print("Transmit Error...)"); }	 
		}	
	}
	//ARM System
	mmc.setSerialPortCommand(port,"ARM","\n");
	Thread.sleep(5);
	print(mmc.getSerialPortAnswer(port, "\n"));
	
	// Start collecting images.  **AB Note this is mostly copied form burstacquire example!
	// Arguments are the number of images to collect, the amount of time to wait
	// between images, and whether or not to halt the acquisition if the
	// sequence buffer overflows.

	mmc.startSequenceAcquisition(nrFrames, 0, true);
	builder = mm.data().getCoordsBuilder().z(0).channel(0).stagePosition(0);
	int curFrame = 0;
	int channel = 0;
	int slice=0;
	print(progline);

	while (mmc.getRemainingImageCount() > 0 || mmc.isSequenceRunning(mmc.getCameraDevice())) {
	   if (mmc.getRemainingImageCount() > 0) {
	   
	      tagged = mmc.popNextTaggedImage();
	      image = mm.data().convertTaggedImage(tagged,builder.time(curFrame).channel(channel).z(slice).build(), null);
	      print("Capture Time " + curFrame + ", Channel " + channel + ", Z Slice " + slice ); 
	      store.putImage(image);
	      
	      //handle placing images in the right location
	      if(zStep == 0) {
	      	++channel;
		      if(channel == progline){
		      	channel=0;
		      	curFrame++;
		   	} //resets channel to 0 when required
	      } //iterate on channel if only dimension used - timelapse shouldn't affect this
	      
	      if(zStep != 0) { // z sweep active
	      	
	      	if(mode == 0) { //sweep all z then step channel
		      	++slice;
		      	if(slice == (int)zNumsteps) { //got to end of sweep
		      		++channel; //switch channel
		      		slice=0;  //reet Z to 0
		      	}
		         if(channel == progline){
			      	channel=0;
			      	curFrame++;
			   	} //resets channel to 0 when required		      
	      	}	      
	      if(mode == 1) { //Step channels then step Z
		      	++channel;
		      	if(channel == progline) { //got to end of channels
		      		++slice; //switch channel
		      		channel=0;  //reet channel to 0
		      	}
		         if(slice == (int)zNumsteps) { //got to end of sweep
		      		++curFrame; //switch channel
		      		slice=0;  //reet Z to 0
		      	}	      
	      	}
	      }
	   }
	   else {
	      // Wait for another image to arrive.
	      //print ( Math.min(.5 * exposureMs, 20) );
	      mmc.sleep(Math.min(.5 * exposureMs, 20));
	   }
	}	
	mmc.stopSequenceAcquisition();
	// Have Micro-Manager handle logic for ensuring data is saved to disk.
	mm.displays().manage(store);
	store.save(Datastore.SaveMode.MULTIPAGE_TIFF, savePath);
}


/*
 * Sequence Focus Programming	PROG_FOCUS,int Start, int Step,Int #steps,boolean direction,boolean slave	!..inputs	NO NEGATIVES
 * Sequence Focus Programming	PROG_FOCUS,int Start, int Step,Int #steps,boolean direction,boolean slave	!..inputs	NO NEGATIVES
 * Sequence TTL Programming	PROG_TTL,int Program Line#, int TTL #, Boolean On/Off	!...	MaxProg Set by high #
 * Sequence DAC Programming	PROG_DAC,int Program Line#, int DAC #, int 16 bit output (0-65535)	!...	MaxProg Set by high # 
 * Delay Array Programming	PROG_DEL , int program line #, int millisecond delay	!...	Watch Timeout
 * 
 * 
 * 
 */
